PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PsychoPyTest
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.20
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = Clench jaw
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    ImageComponent Tongue
      image = C:/Users/sveld/Downloads/CruX/GUI/cartoon-tongue-smile-isolated-on-white-background-vector-23973634.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 5.0
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    TextComponent text_2
      letterHeight = 0.20
      startVal [time (s)] = 13.0
      stopVal [duration (s)] = 1.0
      text = Clench jaw
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    ImageComponent Feet
      image = C:/Users/sveld/Downloads/CruX/GUI/feet-vector-656561.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 5.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Import necessary libraries
        from psychopy import visual, core
        import random

        # Create a window for the experiment
        win = visual.Window(size=(800, 600), fullscr=False)

        # Define the stimuli
        tongue_image = visual.ImageStim(win, image='tongue_image.png')
        feet_image = visual.ImageStim(win, image='feet_image.png')
        instruction_text = visual.TextStim(win, text='clench jaw')

        # Define the timing parameters
        iti_min = 3.0  # minimum inter-trial interval in seconds
        iti_max = 5.0  # maximum inter-trial interval in seconds
        stim_duration = 5.0  # duration of image presentation in seconds

        # Set up the experiment
        for trial in range(10):
            # Display a blank screen for a semi-random inter-trial interval
            iti_duration = random.uniform(iti_min, iti_max)
            core.wait(iti_duration)

            # Display the "clench jaw" instruction for 1 second
            instruction_text.draw()
            win.flip()
            core.wait(1.0)

            # Display a random image for 5 seconds
            if random.randint(0, 1) == 0:
                tongue_image.draw()
            else:
                feet_image.draw()

            win.flip()
            core.wait(stim_duration)

        # Clean up and exit the experiment
        win.close()
        core.quit()
Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:3
    loopType = random
    nReps = 3
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    Routine trial
  LoopTerminator trials
